CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Animal>[1-9][a-zA-Z]{1,2})-(?P<Slice>[1-9])\s(?P<Region>.{2,3})\s40x_(?P<Channel>ch[1,2])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:3.21
    Select the rule criteria:and (file does contain "ch2") (file doesnot contain "mask")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2") (file does contain "mask")
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    Name to assign these objects:Nucleus
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:p65
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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notes:['Genera una imágen de los núcleos utilizando las máscaras obtenidas en Cellpose']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
    Select the input image:p65
    Name the output image:MaskNuc
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus
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    Invert the mask?:No

MeasureImageIntensity:[module_num:6|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notes:['Mide la intensidad dentro de los núcleos (MaskNuc) y en toda la imagen (p65)']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
    Select images to measure:MaskNuc, p65
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
CalculateMath:[module_num:7|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notes:['Calcula el cociente entre la intensidad nuclear y total']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
    Name the output measurement:Ratio_Nuc_Tot
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_MaskNuc
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_TotalIntensity_p65
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|E:\Experimentos\Inmunos
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version,Experiment|Modification_Timestamp,Experiment|Run_Timestamp,Image|Intensity_MeanIntensity_MaskNuc,Image|Intensity_MinIntensity_MaskNuc,Image|Intensity_StdIntensity_MaskNuc,Image|Intensity_MedianIntensity_MaskNuc,Image|Intensity_TotalIntensity_MaskNuc,Image|Intensity_MaxIntensity_MaskNuc,Image|Metadata_Animal,Image|Metadata_Region,Image|Metadata_Frame,Image|Metadata_Series,Image|Metadata_FileLocation,Image|Metadata_Slice,Image|Metadata_Channel,Image|FileName_p65,Image|FileName_DNA,Image|Group_Number,Image|Group_Index,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Ratio_nuc_tot
    Overwrite existing files without warning?:No
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