CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Animal>[1-9][a-zA-Z]{1,2})-(?P<Slice>[1-9])\s(?P<Region>.{2,3})\s40x_(?P<Channel>ch[1,2])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:3.21
    Select the rule criteria:and (file does contain "ch2") (file doesnot contain "mask")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2") (file does contain "mask")
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    Name to assign these objects:Nucleus
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:p65
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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notes:['Use Cellpose mask to filter signal inside the nucleus']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
    Select the input image:p65
    Name the output image:MaskNuc
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus
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    Invert the mask?:No

RescaleIntensity:[module_num:6|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notes:['Increases speckles brightness. This will help to create a mask of those objects.']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
    Select the input image:MaskNuc
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
Threshold:[module_num:7|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notes:['Thresholding to generate a binary mask of the speckles.']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
    Select the input image:RescaleIntensity
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:8|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notes:['Convert the image of the masked speckles into objects, to further relate them to their corresponding nucleus. ']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
    Select the input image:Threshold
    Name the output object:p65_speckles
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:9|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notes:['Measures size of the speckles.']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
    Select object sets to measure:p65_speckles
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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notes:['Filters objects that are too small. ']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
    Select the objects to filter:p65_speckles
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:1.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_SurfaceArea
    Filter using a minimum measurement value?:Yes
    Minimum value:18.5
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:11|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notes:['Relates the spekles to their corresponding nuclei. ']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
    Parent objects:Nucleus
    Child objects:FilterObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Speckles_nucleus
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
MeasureObjectSizeShape:[module_num:12|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notes:['Measure the size of the speckles. ']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
    Select object sets to measure:Nucleus, Speckles_nucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|E:\Experimentos\Inmunos
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:p65_speckles|AreaShape_SurfaceArea,p65_speckles|AreaShape_Volume,p65_speckles|Children_FilterObjects_Count,p65_speckles|Number_Object_Number,Image|Count_Nucleus,Image|Metadata_Channel,Image|Metadata_Region,Image|Metadata_Slice,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_FileLocation,Image|Metadata_Animal,Image|Group_Number,Image|Group_Length,Image|Group_Index,Image|FileName_p65,Image|FileName_DNA,Nucleus|Mean_FilterObjects_Number_Object_Number,Nucleus|Mean_FilterObjects_Location_Center_X,Nucleus|Mean_FilterObjects_Location_Center_Y,Nucleus|Mean_FilterObjects_Location_Center_Z,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:RG0.4_
    Overwrite existing files without warning?:No
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